CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Specify the location of files to be analyzed by the pipeline.', '______________', '1. Drag and drop the folder(s) with images that you want to analyze.', '', '2. Filter images >> Custom', '\\tMatch >> All ', '\\tSelect the rule criteria', '\\t\\tExtension >> Is >> “tif”, “tiff” ….. ', '\\t\\t+', '\\t\\tFile >> Does not >> Contain >> _thumb', '', '3. Click on button “Apply filters to the file list”, to filter out thumbs and other unwanted files', '', '4. Go to module “Metadata”']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "_thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Extract and associate metadata with your images.', '', '____________________', '', '1. Extract information from file names (your images) using regular expression. This information will be stored along with the measurements. ', '', '', 'Regex examples (copy and paste the regex in the field “Regular expression to extract from file name”):', '', '* exp-WIDE', '(?P<Barcode>P[0-9]{6})_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)_w(?P<ChannelNumber>[0-9])', '', '* KOday7-40X-H2O2-Glu', '^(?P<Date>[0-9]{6})-(?P<Barcode>.*?)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]*)_w(?P<ChannelNumber>[0-9])', '', '', '2. Press “Update”', '', '3. Go to module “NamesAndTypes”', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Barcode>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Assign a name to each image by which other modules will refer to it. ', '', '1. Match the channels by the channel number collected with regex in the prevous module (module “Metadata”)', '', 'Metadata >> Does >> Have ChannelNumber matching >> 1', 'Name to assign these images >> w1_HOECHST', '', 'Metadata >> Does >> Have ChannelNumber matching >> 2', 'Name to assign these images >> w2_SYTO', '', 'Metadata >> Does >> Have ChannelNumber matching >> 3', 'Name to assign these images >> w3_MITO', '', 'Metadata >> Does >> Have ChannelNumber matching >> 4', 'Name to assign these images >> w4_CONCAVALIN', '', 'Metadata >> Does >> Have ChannelNumber matching >> 5', 'Name to assign these images >> w5_PHALLOIDINandWGA', '', '2. Set image set matching data to “Metadata”', '', '3. Match metadata “Barcode”, “Well” and “Site” for each assigned name', '', '4. Click “Update”', '', '5. Go to next module “Groups” or do File >> Export >> Image Set Listing…', '', '']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'w5_PHALLOIDINandWGA': u'Barcode', u'w4_CONCAVALIN': u'Barcode', u'w2_SYTO': u'Barcode', u'w3_MITO': u'Barcode', u'w1_HOECHST': u'Barcode'}, {u'w5_PHALLOIDINandWGA': u'Well', u'w4_CONCAVALIN': u'Well', u'w2_SYTO': u'Well', u'w3_MITO': u'Well', u'w1_HOECHST': u'Well'}, {u'w5_PHALLOIDINandWGA': u'Site', u'w4_CONCAVALIN': u'Site', u'w2_SYTO': u'Site', u'w3_MITO': u'Site', u'w1_HOECHST': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:w1_HOECHST
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:w2_SYTO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:w3_MITO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:w4_CONCAVALIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:w5_PHALLOIDINandWGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', '1. Group images by metadata category “Barcode”', '', '2. Add module ExportToSpreadsheet', '', '', '']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Barcode

ExportToSpreadsheet:[module_num:5|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notes:['Name the csv files', '', '1-ImageSetList_BARCODE_WELL_SITE_Image.csv', '']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|expTA/\g<Barcode>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Group_Index,Image|Group_Number,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_02Metadata,Image|ExecutionTime_04Groups,Image|ExecutionTime_01Images,Image|URL_w5_PHALLOIDINandWGA,Image|URL_w4_CONCAVALIN,Image|URL_w3_MITO,Image|URL_w2_SYTO,Image|URL_w1_HOECHST,Image|PathName_w5_PHALLOIDINandWGA,Image|PathName_w4_CONCAVALIN,Image|PathName_w3_MITO,Image|PathName_w2_SYTO,Image|PathName_w1_HOECHST,Image|FileName_w5_PHALLOIDINandWGA,Image|FileName_w4_CONCAVALIN,Image|FileName_w3_MITO,Image|FileName_w2_SYTO,Image|FileName_w1_HOECHST,Image|Metadata_Barcode,Image|Metadata_Well,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:ImageSetList_\g<Barcode>.csv
    Use the object name for the file name?:No
