CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/proj/sllstore2017091/CellProfiler/cp_output/expCombTox/U2OS-24hr-1
    Name of the file:ImageSetList_U2OS-24hr-1.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Barcode
    Rescale intensities?:No

Threshold:[module_num:2|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
    Select the input image:w1_HOECHST
    Name the output image:Threshold_w1_HOECHST
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.04
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
MeasureImageAreaOccupied:[module_num:3|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Threshold_w1_HOECHST

CalculateMath:[module_num:4|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
    Name the output measurement:Ratio_w1_HOECHST
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Threshold_w1_HOECHST
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_Threshold_w1_HOECHST
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:5|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:Ratio_cells
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Math_Ratio_w1_HOECHST
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.2
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
ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|illum
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ImageNumber,Image|Group_Index,Image|Group_Number,Image|Width_w5_PHALLOIDINandWGA,Image|Width_w4_CONCAVALIN,Image|Width_w3_MITO,Image|Width_w2_SYTO,Image|Width_w1_HOECHST,Image|ExecutionTime_02Threshold,Image|ExecutionTime_01LoadData,Image|ExecutionTime_03MeasureImageAreaOccupied,Image|ExecutionTime_04CalculateMath,Image|ExecutionTime_05FlagImage,Image|URL_w5_PHALLOIDINandWGA,Image|URL_w4_CONCAVALIN,Image|URL_w3_MITO,Image|URL_w2_SYTO,Image|URL_w1_HOECHST,Image|MD5Digest_w5_PHALLOIDINandWGA,Image|MD5Digest_w4_CONCAVALIN,Image|MD5Digest_w3_MITO,Image|MD5Digest_w2_SYTO,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Illum_\g<Barcode>_Image.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:Illum_\g<Barcode>_Experiment.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:Illum_\g<Barcode>_ObjectRelationships.csv
    Use the object name for the file name?:No

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:w1_HOECHST
    Name the output image:IllumRegular_w1_Hoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumRegular_w1_Hoechst
    Select method for constructing file names:Single name
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    Enter single file name:illumRegular_\g<Barcode>_w1_hoechst
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:w2_SYTO
    Name the output image:IllumRegular_w2_Syto
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumRegular_w2_Syto
    Select method for constructing file names:Single name
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    Enter single file name:illumRegular_\g<Barcode>_w2_syto
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:w3_MITO
    Name the output image:IllumRegular_w3_Mito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumRegular_w3_Mito
    Select method for constructing file names:Single name
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    Enter single file name:illumRegular_\g<Barcode>_w3_mito
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:w4_CONCAVALIN
    Name the output image:IllumRegular_w4_Concavalin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:IllumRegular_w4_Concavalin
    Select method for constructing file names:Single name
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    Enter single file name:illumRegular_\g<Barcode>_w4_concavalin
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:w5_PHALLOIDINandWGA
    Name the output image:IllumRegular_w5_PhallAndWga
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:IllumRegular_w5_PhallAndWga
    Select method for constructing file names:Single name
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    Enter single file name:illumRegular_\g<Barcode>_w5_phallANDwga
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|illum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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