CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/proj/sllstore2017091/CellProfiler/cp_output/expCombTox/uncomplete/U2OS-24hr-2
    Name of the file:ImageSetList_U2OS-24hr-2.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Barcode
    Rescale intensities?:No

LoadSingleImage:[module_num:2|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
    Input image file location:Default Output Folder sub-folder|illum
    Filename of the image to load (Include the extension, e.g., .tif):illumRegular_\g<Barcode>_w1_hoechst.npy
    Load as images or objects?:Images
    Name the image that will be loaded:illum_hoechst
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Rescale intensities?:No
    Filename of the image to load (Include the extension, e.g., .tif):illumRegular_\g<Barcode>_w2_syto.npy
    Load as images or objects?:Images
    Name the image that will be loaded:illum_syto
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Rescale intensities?:No
    Filename of the image to load (Include the extension, e.g., .tif):illumRegular_\g<Barcode>_w3_mito.npy
    Load as images or objects?:Images
    Name the image that will be loaded:illum_mito
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Rescale intensities?:No
    Filename of the image to load (Include the extension, e.g., .tif):illumRegular_\g<Barcode>_w4_concavalin.npy
    Load as images or objects?:Images
    Name the image that will be loaded:illum_concavalin
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Rescale intensities?:No
    Filename of the image to load (Include the extension, e.g., .tif):illumRegular_\g<Barcode>_w5_phallANDwga.npy
    Load as images or objects?:Images
    Name the image that will be loaded:illum_phallandwga
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Rescale intensities?:No

MeasureImageQuality:[module_num:3|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:w1_HOECHST,w2_SYTO,w3_MITO,w4_CONCAVALIN,w5_PHALLOIDINandWGA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:60
    Spatial scale for blur measurements:100
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:4|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W1_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_w1_HOECHST
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W1_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_w1_HOECHST
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:5|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W2_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_w2_SYTO
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W2_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_w2_SYTO
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:6|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W3_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_w3_MITO
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W3_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_w3_MITO
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:7|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W4_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_w4_CONCAVALIN
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W4_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_w4_CONCAVALIN
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:8|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W5_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_w5_PHALLOIDINandWGA
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_RawImg
    Name the flag:QCFlag-Raw_W5_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_w5_PHALLOIDINandWGA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
CorrectIlluminationApply:[module_num:9|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notes:['Correct each image channel by dividing by the respective illumination correction image. See Singh et al. J Microscopy, 256(3): 231-6, 2014 for more details.']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
    Select the input image:w1_HOECHST
    Name the output image:IllumCorrReg_w1_hoechst
    Select the illumination function:illum_hoechst
    Select how the illumination function is applied:Divide
    Select the input image:w2_SYTO
    Name the output image:IllumCorrReg_w2_syto
    Select the illumination function:illum_syto
    Select how the illumination function is applied:Divide
    Select the input image:w3_MITO
    Name the output image:IllumCorrReg_w3_mito
    Select the illumination function:illum_mito
    Select how the illumination function is applied:Divide
    Select the input image:w4_CONCAVALIN
    Name the output image:IllumCorrReg_w4_concavalin
    Select the illumination function:illum_concavalin
    Select how the illumination function is applied:Divide
    Select the input image:w5_PHALLOIDINandWGA
    Name the output image:IllumCorrReg_w5_phallANDwga
    Select the illumination function:illum_phallandwga
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:10|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notes:['Generate image quality measurements for illum corrected images.', 'Image features made here should include image blur measurements at multiple spatial scales, saturation metrics, and intensity-based measures. ', 'See Bray et al. J Biomol Screen, 17(2):266-74, 2012 for more details. ']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:IllumCorrReg_w1_hoechst,IllumCorrReg_w2_syto,IllumCorrReg_w3_mito,IllumCorrReg_w4_concavalin,IllumCorrReg_w5_phallANDwga
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:60
    Spatial scale for blur measurements:100
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:11|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W1_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_IllumCorrReg_w1_hoechst
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W1_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_IllumCorrReg_w1_hoechst
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:12|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W2_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_IllumCorrReg_w2_syto
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W2_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_IllumCorrReg_w2_syto
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:13|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W3_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_IllumCorrReg_w3_mito
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W3_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_IllumCorrReg_w3_mito
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:14|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W4_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_IllumCorrReg_w4_concavalin
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W4_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_IllumCorrReg_w4_concavalin
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
FlagImage:[module_num:15|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notes:['The value of the flag is 1 if the image meets the selected criteria (for example, if it fails QC), and 0 if it does not meet the criteria (if it passes QC).']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
    Hidden:2
    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W5_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_IllumCorrReg_w5_phallANDwga
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Quality_illumCorrImg
    Name the flag:QCFlag-Illum-Corr_W5_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_IllumCorrReg_w5_phallANDwga
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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
Threshold:[module_num:16|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
    Select the input image:w1_HOECHST
    Name the output image:Threshold_BrightRegion
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:Threshold_BrightRegion
    Name the primary objects to be identified:Identify_LargeBrightArtefacts_w1
    Typical diameter of objects, in pixel units (Min,Max):200,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:Identify_LargeBrightArtefacts_w1
    Name the output objects:Enlarge_IdentifiedLargeBrightArtefacts_w1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:100
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
MaskImage:[module_num:19|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
    Select the input image:w1_HOECHST
    Name the output image:w1_HOECHST_ExcludedLargeBrightArtefacts
    Use objects or an image as a mask?:Objects
    Select object for mask:Enlarge_IdentifiedLargeBrightArtefacts_w1
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    Invert the mask?:Yes

MaskImage:[module_num:20|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
    Select the input image:w5_PHALLOIDINandWGA
    Name the output image:w5_PHALLOIDINandWGA_ExcludedLargeBrightArtefacts
    Use objects or an image as a mask?:Objects
    Select object for mask:Enlarge_IdentifiedLargeBrightArtefacts_w1
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    Invert the mask?:Yes

FilterObjects:[module_num:21|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enabled:False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
    Select the objects to filter:Enlarge_IdentifiedLargeBrightArtefacts_w1
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:w1_HOECHST_ExcludedLargeBrightArtefacts
    Name the primary objects to be identified:primobj_nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:23|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
    Select the input objects:primobj_nuclei
    Name the objects to be identified:secobj_cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:w5_PHALLOIDINandWGA_ExcludedLargeBrightArtefacts
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.7
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.04,0.9
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
IdentifyTertiaryObjects:[module_num:24|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
    Select the larger identified objects:secobj_cells
    Select the smaller identified objects:primobj_nuclei
    Name the tertiary objects to be identified:terobj_cytoplasm
    Shrink smaller object prior to subtraction?:Yes

DisplayDataOnImage:[module_num:25|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
    Display object or image measurements?:Object
    Select the input objects:primobj_nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:w1_HOECHST
    Text color:#20FEFE
    Name the output image that has the measurements displayed:display_objnum_nuclei
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:display_objnum_nuclei
    Select method for constructing file names:Single name
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    Enter single file name:objnum_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|objnum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:w5_PHALLOIDINandWGA
    Name the output image:outline_nuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#08F507
    Select objects to display:primobj_nuclei
    Select outline color:#EF180B
    Select objects to display:secobj_cells

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:outline_nuclei
    Select method for constructing file names:Single name
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    Enter single file name:outlines_nucleiANDcells_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:29|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notes:['Measure the morpholigical features of all objects.']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
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm
    Calculate the Zernike features?:Yes

MeasureColocalization:[module_num:30|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notes:['Measure the intensity correlation between all channels, within all objects.']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
    Hidden:5
    Hidden:3
    Select an image to measure:w1_HOECHST
    Select an image to measure:w2_SYTO
    Select an image to measure:w3_MITO
    Select an image to measure:w4_CONCAVALIN
    Select an image to measure:w5_PHALLOIDINandWGA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:primobj_nuclei
    Select an object to measure:secobj_cells
    Select an object to measure:terobj_cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:31|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notes:['Granularity characteristics across all images. This is a per-image measure.']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
    Image count:5
    Object count:1
    Select an image to measure:w1_HOECHST
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:primobj_nuclei
    Object count:3
    Select an image to measure:w2_SYTO
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm
    Object count:3
    Select an image to measure:w3_MITO
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm
    Object count:3
    Select an image to measure:w4_CONCAVALIN
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm
    Object count:3
    Select an image to measure:w5_PHALLOIDINandWGA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm

MeasureObjectIntensity:[module_num:32|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notes:['Measure the intensity characteristics from all channels, within all objects.']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
    Hidden:5
    Select an image to measure:w1_HOECHST
    Select an image to measure:w2_SYTO
    Select an image to measure:w3_MITO
    Select an image to measure:w4_CONCAVALIN
    Select an image to measure:w5_PHALLOIDINandWGA
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm

MeasureObjectIntensityDistribution:[module_num:33|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:w1_HOECHST
    Select an image to measure:w2_SYTO
    Select an image to measure:w3_MITO
    Select an image to measure:w4_CONCAVALIN
    Select an image to measure:w5_PHALLOIDINandWGA
    Select objects to measure:primobj_nuclei
    Object to use as center?:These objects
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    Select objects to measure:secobj_cells
    Object to use as center?:Edges of other objects
    Select objects to use as centers:primobj_nuclei
    Select objects to measure:terobj_cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:primobj_nuclei
    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:primobj_nuclei
    Select neighboring objects to measure:primobj_nuclei
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:35|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
    Select objects to measure:secobj_cells
    Select neighboring objects to measure:secobj_cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:36|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notes:['Measure the texture features in all objects, against all 5 channels, using multiple spatial scales.']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enabled:False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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:w1_HOECHST
    Select an image to measure:w2_SYTO
    Select an image to measure:w3_MITO
    Select an image to measure:w4_CONCAVALIN
    Select an image to measure:w5_PHALLOIDINandWGA
    Select objects to measure:primobj_nuclei
    Select objects to measure:secobj_cells
    Select objects to measure:terobj_cytoplasm
    Texture scale to measure:3
    Texture scale to measure:10
    Texture scale to measure:30
    Measure images or objects?:Objects

ExportToSpreadsheet:[module_num:37|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|FeatureExtraction_parts
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_Image.csv
    Use the object name for the file name?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_Experiment.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_ObjectRelationships.csv
    Use the object name for the file name?:No
    Data to export:primobj_nuclei
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_primobj_nuclei.csv
    Use the object name for the file name?:No
    Data to export:secobj_cells
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_secobj_cells.csv
    Use the object name for the file name?:No
    Data to export:terobj_cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:FeatureExtraction_\g<Barcode>_\g<Well>_s\g<Site>_terobj_cytoplasm.csv
    Use the object name for the file name?:No

GrayToColor:[module_num:38|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
    Select a color scheme:RGB
    Select the image to be colored red:w3_MITO
    Select the image to be colored green:w5_PHALLOIDINandWGA
    Select the image to be colored blue:w1_HOECHST
    Name the output image:ColorImage_RGB_w3w5w1
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:ColorImage_RGB_w3w5w1
    Select method for constructing file names:Single name
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    Enter single file name:RGB_w3w5w1_\g<Barcode>_\g<Well>_site\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RGBimg
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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